PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age (yrs)': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = -1.0000, -1.0000, -1.0000
  expName = experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine cover_story
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    TextboxComponent cover_story_text
      bold = False
      editable = False
      font = Segoe UI
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text = “Hello XYZ (say the name of the child)! Today, we will play a very interesting game in which there are two puppets! The puppets are the Lady Bird (flashes the character’s picture) and the Monkey (flashes the respective picture). They love playing hide-n-seek games with their toys. The Lady Bird always hides a toy and goes away. After she goes away, the Monkey comes up and tries to look for the toy. In the game, you will help the monkey in finding out where the toy is hidden.” 
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        rep_number = 0

        # MAKE SURE THIS CODE BLOCK IS IN THE RIGHT AREA (it should be a part of the loop actually)
      Begin Routine:
        # In Begin Routine tab (or at the start of the loop)
        import pandas as pd
        conditions = pd.read_csv(fam_trial_loop.conditionsFile)

        # Filter rows based on repetition
        if rep_number == 0:
            # choose high-certainty object: apple or cup
            filtered_conditions = conditions[conditions['is_high_confidence_object'] == 1]
        else:
            # choose low-certainty object
            filtered_conditions = conditions[conditions['is_high_confidence_object'] == 0]

        fam_trial_loop.conditions = filtered_conditions.to_dict('records')
        fam_trial_loop.conditionsFile = None  # Clear the file reference to use the filtered conditions

        rep_number += 1
  Routine fam
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    TextboxComponent fam_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        We show the apple and kettle stimuli, and ask the child two questions:

        “[name of the participant], let’s try to guess the name of the object. What do you think was the object that the Monkey saw?”
        “How sure/certain are you that the object was (the name that the child took)?”
    MovieComponent fam_clip
      backend = ffpyplayer
      durationEstim = 25
      forceEndRoutine = False
      movie [set every repeat] = $fam_video_filename
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
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  Routine test
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  Routine thanks
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your attention and participation! :)
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Flow
  Routine cover_story
  LoopInitiator fam_trial_loop loopType="TrialHandler"
    conditionsFile = lists/fam_trials_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_apple.mov'), ('is_high_confidence_object', 1)]),
      OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_cup.mov'), ('is_high_confidence_object', 1)]),
      OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_nonsense1.mov'), ('is_high_confidence_object', 0)]),
      OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_nonsense2.mov'), ('is_high_confidence_object', 0)])]
    Routine fam
  LoopTerminator fam_trial_loop
  Routine test
  Routine thanks
